{load_file("nrngui.hoc")}
objref pc
pc = new ParallelContext()
{load_file("Stick.hoc")}
{load_file("ranstream.hoc")}

NCELL = 200
TSTOP = 200
proc mknet(){
    mkcells($1)
}
objref cells
proc mkcells(){local i, ncell localobj cell,nc,nil
    ncell = $1
    cells = new List()
    for(i=pc.id;i<ncell;i+=pc.nhost){
	cell = new Stick()
	cells.append(cell)
	/*
	//Fukuda model
	cell.insertFukuda()
	cell.setType(1)
	*/
	
	//MsLN
	cell.insertLNlla3()
	cell.setType(4)
	
	/*
	//Hodgkin-Huxley model
	cell.insertHH()
	*/
	
	pc.set_gid2node(i,pc.id)
	nc = cell.connect2target(nil)
	pc.cell(i,nc)
    }
}

mknet(NCELL)

proc mkStim(){local i, ncell
    MAX = 15000
    Interval = 300
    for i = 0, cells.count -1 {
	cells.object(i).imax = MAX * (pc.nhost*i + pc.id) / NCELL * 25
	print cells.object(i).imax
	cells.object(i).setIntermitStim_gaus(30,cells.object(i).imax,Interval,0,-1,0.00)
    }
}
mkStim()
proc setSpikeRecord(){local i
    for i = 0, cells.count -1{
	cells.object(i).setSpikeRecord()
    }
}
setSpikeRecord()

pc.barrier()
tstop = TSTOP
{pc.set_maxstep(10)}
stdinit()
{pc.psolve(tstop)}

proc printSpikeRecord(){local i
    for i = 0, cells.count -1{
	cells.object(i).printSpikeRecord2(pc.id,i, Interval,TSTOP,0,0)
    }
}

printSpikeRecord()

{pc.runworker()}
{pc.done()}
quit()